CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does contain "npy") (and (extension does istif))

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Area": "text", "ChannelNumber": "integer", "Col": "text", "Conc.": "integer", "Concentration": "text", "Date": "text", "Drug": "text", "FieldID": "text", "FileLocation": "text", "Frame": "text", "PlateName": "text", "Row": "integer", "Series": "text", "Site": "integer", "Unit": "text", "Well": "text", "Well Index": "integer", "WellColumn": "integer", "WellRow": "integer"}
    Extraction method count:5
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Site>\d{2})p\d{2}-ch(?P<ChannelNumber>\d)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Date>[0-9]{4}-[0-9]{2}-[0-9]{2})
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FieldID>r\d{2}c\d{2}f\d{2})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<PlateName>[a-z]{5,6}[1-5])
    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
    Metadata file location:Default Input Folder sub-folder|OneDrive - National University of Ireland, Galway
    Match file and image metadata:[{'CSV Metadata': 'PlateName', 'Image Metadata': 'PlateName'}, {'CSV Metadata': 'Row', 'Image Metadata': 'WellRow'}, {'CSV Metadata': 'Col', 'Image Metadata': 'WellColumn'}]
    Use case insensitive matching?:Yes
    Metadata file name:plateMapWithDrugsCorrected.csv
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'IllumAGP': None, 'IllumDNA': None, 'IllumER': None, 'IllumMito': None, 'IllumRNA': None, 'OrigDNA': 'FieldID', 'OrigER': 'FieldID', 'OrigRNA': 'FieldID', 'OrigAGP': 'FieldID', 'OrigMITO': 'FieldID'}]
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch5")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch4")
    Name to assign these images:OrigMITO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumAGP")
    Name to assign these images:IllumAGP
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumDNA")
    Name to assign these images:IllumDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumER")
    Name to assign these images:IllumER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumRNA")
    Name to assign these images:IllumRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumMito")
    Name to assign these images:IllumMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:6|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:7|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
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigMITO
    Name the output image:MITO
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:80
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ER
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:100
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:13|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
    Select images to measure:AGP, DNA, ER, MITO, RNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:14|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
    Select images to measure:AGP, DNA, ER, MITO, RNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:AGP, DNA, ER, MITO, RNA
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei

MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:FilteredNuclei
    Select neighboring objects to measure:FilteredNuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:19|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
    Select images to measure:AGP, DNA, ER, MITO, RNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:FilteredNuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:Cells, Cytoplasm, FilteredNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:21|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
    Select images to measure:AGP, DNA, ER, MITO, RNA
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

OverlayOutlines:[module_num:22|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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:FilteredNuclei

OverlayOutlines:[module_num:23|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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\Cell Painting Data\\CellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:blasts1BR1-lastRows
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:FilteredNuclei
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:25|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:blasts4.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
    Select the plate metadata:PlateName
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:BR2
    Which objects should be used for locations?:FilteredNuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
CreateBatchFiles:[module_num:26|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:c:\users\lambr
    Cluster root path:c:\users\lambr
